OpenViBE-Scenario(FormatVersion=2, Creator=OpenViBE Designer, CreatorVersion=2.2.0)

Acquisition client port 1024 => #0
  Acquisition server hostname = ${AcquisitionServer_HostName}
  Acquisition server port = 1024
#0.Signal stream -> Channel Selector "1;7;9;14;13;15;22"
  Channel List = 1;7;9;14;13;15;22
  Action = Select
  Channel Matching Method = Smart
-> Temporal filter "Notch 60Hz" => #2
  Filter Method = Butterworth
  Filter Type = Band Stop
  Filter Order = 4
  Low Cut-off Frequency (Hz) = 59
  High Cut-off Frequency (Hz) = 61
  Band Pass Ripple (dB) = 0.5
-> Temporal Filter => #3
  Filter Method = Butterworth
  Filter Type = Band Pass
  Filter Order = 4
  Low Cut-off Frequency (Hz) = 13
  High Cut-off Frequency (Hz) = 89
  Band Pass Ripple (dB) = 0.5
#2 -> Temporal Filter => #4
  Filter Method = Butterworth
  Filter Type = Band Pass
  Filter Order = 4
  Low Cut-off Frequency (Hz) = 27
  High Cut-off Frequency (Hz) = 89
  Band Pass Ripple (dB) = 0.5
#2 -> Temporal Filter => #5
  Filter Method = Butterworth
  Filter Type = Band Pass
  Filter Order = 4
  Low Cut-off Frequency (Hz) = 41
  High Cut-off Frequency (Hz) = 89
  Band Pass Ripple (dB) = 0.5
#2 -> Temporal Filter => #6
  Filter Method = Butterworth
  Filter Type = Band Pass
  Filter Order = 4
  Low Cut-off Frequency (Hz) = 55
  High Cut-off Frequency (Hz) = 89
  Band Pass Ripple (dB) = 0.5
Input 1=#3, Input 2=#4, Input 3=#5, Input 4=#6 -> Signal Merger => #7
Input signal=#7, Input stimulations=#0.Stimulations -> Stimulation based epoching
  Epoch duration (in sec) = 5
  Epoch offset (in sec) = 0.1
  Stimulation to epoch from = OVTK_StimulationId_Number_05
-> Matlab Scripting
  Box clock frequency in Hz = 1
  Matlab executable (path) = C:/Program Files/MATLAB/R2020b/bin/win64/MATLAB.exe
  Matlab working directory = C:/Users/pq/Desktop/OV_matlab_scirpt
  Initialize function = Initialize_2
  Process function = SSVEP_Process_2
  matlab_Uninitialize = Uninitialize
-> TCP Writer
  Port = 5678
  Output format = Raw
#0.Signal stream -> 0x341d3912 Channel Selector "O1; O2; Pz; P3; P4"
  Channel List = O1; O2; Pz; P3; P4
  Action = Select
  Channel Matching Method = Smart
Signal=#0.Signal stream, Stimulation=#0.Stimulations -> GDF file writer
  Filename = C:/Users/pq/Desktop/OV_matlab_scirpt/uncued_SSVEP-[$core{date}-$core{time}].gdf
