OpenViBE-Scenario(FormatVersion=2, Creator=OpenViBE Designer, CreatorVersion=2.2.0)

Acquisition client port 1024 => #0
  Acquisition server hostname = ${AcquisitionServer_HostName}
  Acquisition server port = 1024
#0.Signal stream -> Temporal filter "Notch 60Hz"
  Filter Method = Butterworth
  Filter Type = Band Stop
  Filter Order = 4
  Low Cut-off Frequency (Hz) = 59
  High Cut-off Frequency (Hz) = 61
  Band Pass Ripple (dB) = 0.5
-> Temporal Filter => #2
  Filter Method = Butterworth
  Filter Type = Band Pass
  Filter Order = 4
  Low Cut-off Frequency (Hz) = 7
  High Cut-off Frequency (Hz) = 65
  Band Pass Ripple (dB) = 0.5
Input signal=#2, Input stimulations=#0.Stimulations -> Stimulation based epoching
  Epoch duration (in sec) = 2
  Epoch offset (in sec) = 0
  Stimulation to epoch from = OVTK_StimulationId_Number_05
-> Matlab Scripting
  Box clock frequency in Hz = 1
  Matlab executable (path) = C:/Program Files/MATLAB/R2024b/bin/win64/MATLAB.exe
  Matlab working directory = C:/Users/pq/Desktop/OV_matlab_scirpt
  Initialize function = Initialize
  Process function = SSVEP_Process
  matlab_Uninitialize = Uninitialize
-> TCP Writer
  Port = 5678
  Output format = Raw
Data=#2 -> Signal display "observation"
  Display Mode = Scan
  Auto vertical scale = None
  Scale refresh interval (secs) = 5
  Vertical Scale = 100
  Vertical Offset = 0
  Time Scale = 10
  Bottom ruler = true
  Left ruler = false
  Multiview = false
Stimulation=#0.Stimulations -> 0x341d3912 GDF file writer
  Filename = uncued_SSVEP-[$core{date}-$core{time}].gdf
